<?xml version='1.0' encoding='UTF-8'?>
<MorpheusModel version="4">
    <Description>
        <Title>Notch-Delta Lateral Inhibition</Title>
        <Details>Berkemeier 2023 epsilon-Collier model on hexagonal lattice</Details>
    </Description>
    
    <Space>
        <Lattice class="hexagonal">
            <Size symbol="size" value="14, 14, 0"/>
            <BoundaryConditions>
                <Condition boundary="x" type="periodic"/>
                <Condition boundary="y" type="periodic"/>
            </BoundaryConditions>
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
        </Lattice>
        <SpaceSymbol symbol="space"/>
    </Space>
    
    <Time>
        <StartTime value="0"/>
        <StopTime value="50"/>
        <TimeSymbol symbol="time"/>
        <RandomSeed value="1"/>
    </Time>
    
    <CellTypes>
        <CellType class="medium" name="medium"/>
        
        <CellType class="biological" name="cell">
            <Property symbol="n" value="0.744" name="Notch"/>
            <Property symbol="d" value="0.055" name="Delta"/>
            <Property symbol="d_avg" value="0.055" name="Neighbor Delta avg"/>
            
            <System solver="Runge-Kutta [fixed, O(4)]" time-step="0.1">
                <Constant symbol="h" value="6"/>
                <Constant symbol="k" value="6"/>
                <Constant symbol="a" value="1e8"/>
                <Constant symbol="b" value="100"/>
                <Constant symbol="nu" value="1.0"/>
                
                <DiffEqn symbol-ref="n">
                    <Expression>(d_avg^k) / (a + d_avg^k) - n</Expression>
                </DiffEqn>
                
                <DiffEqn symbol-ref="d">
                    <Expression>nu * (1 / (1 + b * n^h) - d)</Expression>
                </DiffEqn>
            </System>
            
            <NeighborhoodReporter>
                <Input scaling="cell" value="d"/>
                <Output symbol-ref="d_avg" mapping="average"/>
            </NeighborhoodReporter>
        </CellType>
    </CellTypes>
    
    <CellPopulations>
        <Population size="0" type="cell">
            <InitCellLattice/>
            <InitProperty symbol-ref="n">
                <Expression>rand_norm(0.744, 0.01)</Expression>
            </InitProperty>
            <InitProperty symbol-ref="d">
                <Expression>rand_norm(0.055, 0.01)</Expression>
            </InitProperty>
        </Population>
    </CellPopulations>
    
    <Analysis>
        <Gnuplotter time-step="1.0" decorate="false">
            <Terminal name="png" size="600,600,0"/>
            <Plot title="Delta levels">
                <Cells value="d" min="0.0" max="1.0">
                    <ColorMap>
                        <Color value="1.0" color="white"/>
                        <Color value="0.5" color="yellow"/>
                        <Color value="0.0" color="green"/>
                    </ColorMap>
                </Cells>
            </Plot>
        </Gnuplotter>
        
        <Logger time-step="1.0">
            <Input>
                <Symbol symbol-ref="time"/>
                <Symbol symbol-ref="n"/>
                <Symbol symbol-ref="d"/>
            </Input>
            <o>
                <TextOutput file-format="csv"/>
            </o>
        </Logger>
        
        <ModelGraph format="svg" include-tags="#untagged" reduced="true"/>
    </Analysis>
</MorpheusModel>